Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img4.png % %  N N 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img3.png % %  I I 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img6.png % %  L L 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img5.png % %  R R 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img9.png % %  C C 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img1.png % %  U U 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img2.png % %  M M 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img8.png % %  O O 1 E:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%201/img7.png % % // speller target properties
Application:Speller string TextToSpell= CUNA // character or string to spell in offline copy mode